#RickerConstant Model
#bifurcation diag of the discrete map f(x)=(x * exp(-α-β*x)) + a-b*exp(-K*(tau+1))*(p^(tau+1))*delay(x,tau)
#tau = 5
x(t+1)=(x * exp(-alpha-beta*x)) + (a-b*exp(-K*(tau+1)))*(p^(tau+1))*h
y(t+1)= x
z(t+1)= y
w(t+1)=z
v(t+1)=w
h(t+1)=v
init x=0.5
init y=0.5
init z=0.5
init w=0.5
init v=0.5
init h=0.5
x(0)=0.5
y(0)=0.5
z(0)=0.5
w(0)=0.5
v(0)=0.5
h(0)=0.5

#When tau=5,p=0.6 boundaries of a are 0.5, 21.9

#Can't do tau bifurcation so do a and p bifurcations
#a bifurction
par a=6.0, p=0.6, tau=5.0, alpha=0.1, beta=0.3, b=200, K=1.0

@ total=5000,method=discrete,nout=3
@ autoxmin=0.5,autoxmax=22.0,autoymin=-0.5,autoymax=15.0
#a bifurcation
@ dsmax=0.02,dsmin=.00001,parmin=0.5,parmax=22.0, ds=0.02, NPR=40, nmax=400

@ maxstor 10000000,npr=10 
@ xlo=0,xhi=5000,ylo=0,yhi=50,xp=t,yp=x
done
